PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  color = black
  expName = expDesign
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Routines
  Routine trial
    TextComponent visCueText
      letterHeight = 0.025
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = Test
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    PolygonComponent fixDot
      fillColor = white
      shape = circle
      size = (0.015, 0.015)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4.8
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    PolygonComponent fixDotBlue
      fillColor = blue
      lineColor = blue
      shape = circle
      size = (0.015, 0.015)
      startVal [time (s)] = 6.8
      stopVal [duration (s)] = 10
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    SoundComponent soundStim
      sound = A
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2.8
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    KeyboardComponent trialKey
      allowedKeys = 'num_1', 'num_2', 'num_3'
      forceEndRoutine = False
      startVal [time (s)] = 6.8
      stopVal [duration (s)] = 10
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  Routine expStart
    TextComponent expStartText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Press space to begin
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    KeyboardComponent expStartKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine blockStart
    TextComponent blockStartText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Block 1 of 1
        Press space to begin
    KeyboardComponent blockStartKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blockEnd
    TextComponent blockEndText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        End of Block 1
        Press space to begin next block
    KeyboardComponent blockEndKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine expEnd
    TextComponent expEndText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        End of experiment!
        Please stay seated.
    KeyboardComponent expEndKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine expStart
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 6
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    Routine blockStart
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 32
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      Routine trial
    LoopTerminator trials
    Routine blockEnd
  LoopTerminator block
  Routine expEnd
